opentrons/protocol-designer 8.1.1
schemaVersion: 8
protocolName: Mixing LNPs
author: Estefania Mireles
description: Mixing of Aqeous and Solvent Phases to create LNPS
robot: {model: OT-3 Standard, deckId: ot3_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 1, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p1000_multi_flex: {mount: right}
labwareLocationUpdate:
  Solvent Plate: {loadName: corning_96_wellplate_360ul_flat, namespace: opentrons, version: 2, location: D2}
  aqueous plate: {loadName: corning_96_wellplate_360ul_flat, namespace: opentrons, version: 2, location: D1}
  Opentrons Flex 96 Filter Tip Rack 200 µL: {loadName: opentrons_flex_96_filtertiprack_200ul, namespace: opentrons, version: 1, location: A2}
pipetteTiprackAssignments:
  p1000_multi_flex: [opentrons/opentrons_flex_96_filtertiprack_200ul/1]
ingredients:
  - aqueous phase: {description: citrate buffer aqueous phase of LNP}
  - solvent phase: {description: ethanol+lipids}
ingredLocations:
  aqueous plate:
    aqueous phase {volume: 150}: A1-H1, A2-H2, A3-H3, A4-H4
  Solvent Plate:
    solvent phase {volume: 50}: A1-G1, A2-G2, A3-G3, H4, H1-H3, A4-G4
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_200ul/1
  volume: 60
  path: single
  changeTip: always
  aspirate_labware: Solvent Plate
  aspirate_wells: A1-A4
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 45
  aspirate_mmFromBottom: 0.1
  dispense_labware: aqueous plate
  dispense_wells: A1-A4
  dispense_flowRate: 800
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 100
  blowout_checkbox: true
  blowout_location: dest_well
  dropTip_location: trashBin
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p1000_multi_flex, labwareId: Opentrons Flex 96 Filter Tip Rack 200 µL, wellName: A1}
- aspirate: {pipetteId: p1000_multi_flex, volume: 45, labwareId: Solvent Plate, wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.1, x: 0, y: 0}}, flowRate: 716}
- dispense: {pipetteId: p1000_multi_flex, volume: 45, labwareId: Solvent Plate, wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.1, x: 0, y: 0}}, flowRate: 800}
- aspirate: {pipetteId: p1000_multi_flex, volume: 45, labwareId: Solvent Plate, wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.1, x: 0, y: 0}}, flowRate: 716}
- dispense: {pipetteId: p1000_multi_flex, volume: 45, labwareId: Solvent Plate, wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.1, x: 0, y: 0}}, flowRate: 800}
- aspirate: {pipetteId: p1000_multi_flex, volume: 45, labwareId: Solvent Plate, wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.1, x: 0, y: 0}}, flowRate: 716}
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